<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:avt="clr-namespace:Bonsai.Vimba;assembly=Bonsai.Vimba"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>BehaviorBoard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>BehaviorCommands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM6</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>370</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Address>93</harp:Address>
              <harp:PayloadType>U16</harp:PayloadType>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="p1:BehaviorEvent">
              <p1:Type>RegisterCamera</p1:Type>
              <p1:Mask>Digital0</p1:Mask>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FrameEvent</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
              <rx:Name>StartCamera</rx:Name>
            </Expression>
            <Expression xsi:type="p1:BehaviorCommand">
              <p1:Type>StartCamera</p1:Type>
              <p1:Mask>Digital0</p1:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
              <rx:Name>StopCamera</rx:Name>
            </Expression>
            <Expression xsi:type="p1:BehaviorCommand">
              <p1:Type>StopCamera</p1:Type>
              <p1:Mask>Digital0</p1:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="avt:VimbaCapture">
          <avt:Index xsi:nil="true" />
          <avt:SerialNumber>50-0503487975</avt:SerialNumber>
          <avt:FrameCount>30</avt:FrameCount>
          <avt:SettingsFile />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D1</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StartCamera</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D2</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StopCamera</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>