<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:avt="clr-namespace:Bonsai.Vimba;assembly=Bonsai.Vimba"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>DebugTools</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Accumulate" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Subtract" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TreadmillEvents</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Address</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>41</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>S16</harp:Type>
              <harp:IsArray>true</harp:IsArray>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TreadmillCommands</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Address</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>41</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>S16</harp:Type>
              <harp:IsArray>true</harp:IsArray>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="19" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Treadmill</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>TreadmillCommands</rx:Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:Device">
                      <harp:DeviceState>Active</harp:DeviceState>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:LedState>On</harp:LedState>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Disable</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM7</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>TreadmillEvents</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>BehaviorBoard</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>BehaviorCommands</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:Device">
                      <harp:DeviceState>Active</harp:DeviceState>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:LedState>On</harp:LedState>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Disable</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM6</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>DropADC</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Address</Selector>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>44</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>BehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>370</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Address>93</harp:Address>
                    <harp:PayloadType>U16</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="p1:BehaviorEvent">
                    <p1:Type>RegisterCamera</p1:Type>
                    <p1:Mask>Digital0</p1:Mask>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>FrameEvent</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                    <rx:Name>StartCamera</rx:Name>
                  </Expression>
                  <Expression xsi:type="p1:BehaviorCommand">
                    <p1:Type>StartCamera</p1:Type>
                    <p1:Mask>Digital0</p1:Mask>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Object">
                    <rx:Name>StopCamera</rx:Name>
                  </Expression>
                  <Expression xsi:type="p1:BehaviorCommand">
                    <p1:Type>StopCamera</p1:Type>
                    <p1:Mask>Digital0</p1:Mask>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="avt:VimbaCapture">
                <avt:Index xsi:nil="true" />
                <avt:SerialNumber>50-0503487975</avt:SerialNumber>
                <avt:FrameCount>30</avt:FrameCount>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameEvent</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>VideoStream</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ManualOverride</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>MButton ShiftKey Capital CapsLock Space Home D0 D4 D P T NumPad0 NumPad4 F1 F5 Control</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>TiltOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Address>40</harp:Address>
                    <harp:PayloadType>U8</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TreadmillCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Control</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Speed" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Control</wie:Filter>
                <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Address>33</harp:Address>
              <harp:PayloadType>S16</harp:PayloadType>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TreadmillCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>EnableMotors</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>EnableTilt</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="harp:Format">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Address>40</harp:Address>
                          <harp:PayloadType>U8</harp:PayloadType>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TreadmillCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>EnableBelt</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="harp:Format">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Address>32</harp:Address>
                          <harp:PayloadType>U8</harp:PayloadType>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TreadmillCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SetSpeed</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Speed" />
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="harp:Format">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Address>33</harp:Address>
                          <harp:PayloadType>S16</harp:PayloadType>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TreadmillCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="ResetPosition" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Address>43</harp:Address>
                    <harp:PayloadType>S16</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TreadmillCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Object">
              <rx:Name>EndTrial</rx:Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>ShiftKey Space D0 P NumPad0 F1 Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StartTrial</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TreadmillEvents</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BeltSpeed</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>34</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedS16</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TiltPosition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>44</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedS16</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SaveData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FrameRate" Category="Camera" />
              <Property Name="Path" Category="SessionInfo" />
              <Property Name="Session" Category="SessionInfo" />
              <Property Name="Speed" Category="SessionInfo" />
              <Property Name="Sex" Category="SessionInfo" />
              <Property Name="Animal" Category="SessionInfo" />
              <Property Name="Trial" Category="SessionInfo" />
              <Property Name="TrialDuration" Category="TrialDuration" />
              <Property Name="NumberOfRepeats" Category="TrialDuration" />
              <Property Name="MotorSpeed" Category="MotorSpeed" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SessionInfo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="TrialDuration" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="TimeSpanProperty">
                      <Value>PT1M</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TrialDuration</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="FrameRate" Category="Camera" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="cv:VideoWriter,sys:Double">
                    <MemberName>FrameRate</MemberName>
                    <Value>450</Value>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>FrameRate</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="MotorSpeed" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>300</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>MotorSpeed</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="NumberOfRepeats" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>6</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>NumberOfRepeats</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Path" Category="SessionInfo" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>C:\Users\Amurr\Desktop\test</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Path</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Session" Category="SessionInfo" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NoAnimal</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Session</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Speed" Category="SessionInfo" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>0.3</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Speed</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Sex" Category="SessionInfo" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>M</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Sex</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Animal" Category="SessionInfo" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>FAA-1035383</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Animal</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Trial" Category="SessionInfo" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Trial</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}/{1}_{2}_{3}_{4}_{5}</Format>
                    <Selector>Item1,Item2,Item3,Item4,Item5,Item6</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>PathName</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="30" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="30" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="30" Label="Source3" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="30" Label="Source4" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="30" Label="Source5" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source6" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartTrial</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartCamera</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RecordData</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PathName</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TrialFullPath</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>VideoStream</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2,Item1.FrameID,Item1.Timestamp,Item1.Image</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item1 as HarpTimestamp,
Item2 as FrameId,
Item3 as CameraTimestamp,
Item4 as Video)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FrameRate</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FrameRate" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>.avi</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>_VideoStream.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EndTrial</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StopCamera</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialFullPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Users\Amurr\Desktop\test/NoAnimal_0.3_M_FAA-1035383_1_VideoStream.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector>HarpTimestamp,FrameId,CameraTimestamp</io:Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Video</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialFullPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName>C:\Users\Amurr\Desktop\test/NoAnimal_0.3_M_FAA-1035383_1.avi</cv:FileName>
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>450</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TreadmillEvents</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MessageBytes</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>_TreadmillEvents.bin</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialFullPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path>C:\Users\Amurr\Desktop\test/NoAnimal_0.3_M_FAA-1035383_1_TreadmillEvents.bin</dsp:Path>
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>_BehaviorEvents.bin</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MessageBytes</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialFullPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path>C:\Users\Amurr\Desktop\test/NoAnimal_0.3_M_FAA-1035383_1_BehaviorEvents.bin</dsp:Path>
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TreadmillEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessage">
                      <harp:Address>34</harp:Address>
                      <harp:MessageType>Event</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Type>TimestampedS16</harp:Type>
                    <harp:IsArray>false</harp:IsArray>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value,Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>_TreadmillSpeed.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TrialFullPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Users\Amurr\Desktop\test/NoAnimal_0.3_M_FAA-1035383_1_TreadmillSpeed.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="16" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="22" Label="Source2" />
                  <Edge From="8" To="19" Label="Source2" />
                  <Edge From="9" To="13" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="23" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="22" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source3" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="32" Label="Source1" />
                  <Edge From="27" To="29" Label="Source2" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source2" />
                  <Edge From="33" To="37" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="40" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source2" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="44" To="50" Label="Source1" />
                  <Edge From="45" To="47" Label="Source2" />
                  <Edge From="46" To="47" Label="Source1" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="48" To="49" Label="Source1" />
                  <Edge From="49" To="50" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartTrial</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>TaskLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>InitialState</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ResetPosition" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>GoToPosition</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="ResetPosition" />
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="harp:Format">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Address>43</harp:Address>
                          <harp:PayloadType>S16</harp:PayloadType>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TreadmillCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MotorSpeed</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Speed" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>SetSpeed</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Speed" />
                        </Expression>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>300</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="harp:Format">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Address>33</harp:Address>
                          <harp:PayloadType>S16</harp:PayloadType>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TreadmillCommands</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialDuration</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1M</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumberOfRepeats</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="NumberRepeats" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>SubTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ResetPosition" Category="ResetHome" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Count" DisplayName="NumberRepeats" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" Category="TimeBeforePerturb" />
                    <Property Name="Upper" Category="TimeBeforePerturb" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>DelayRunning</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Lower" />
                          <Property Name="Upper" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:CreateContinuousUniform">
                            <p2:Lower>5</p2:Lower>
                            <p2:Upper>9</p2:Upper>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:Sample" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT6.533S</rx:DueTime>
                            <rx:Period>PT0S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PerturbSpeed" Category="Perturb" />
                    <Property Name="PerturbMax" Category="Perturb" />
                    <Property Name="PerturbMin" Category="Perturb" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>Perturbation</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="PerturbSpeed" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="harp:Format">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Address>45</harp:Address>
                          <harp:PayloadType>U16</harp:PayloadType>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TreadmillCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:CreateDiscreteUniform">
                            <p2:Lower>0</p2:Lower>
                            <p2:Upper>1</p2:Upper>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p2:Sample" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="PerturbMax" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="PerturbMin" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it.Item1 == 1 ? it.Item2 : it.Item3</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Value" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="harp:Format">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Address>43</harp:Address>
                          <harp:PayloadType>S16</harp:PayloadType>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TreadmillCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="13" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="10" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="10" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source3" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source2" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Wait" Category="WaitAfterTilt" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>WaitForTilt</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" DisplayName="Wait" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT2S</rx:DueTime>
                            <rx:Period>PT0S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>Reset</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="ResetPosition" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="ResetSpeed" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>100</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="harp:Format">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Address>45</harp:Address>
                          <harp:PayloadType>U16</harp:PayloadType>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TreadmillCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="IntProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="harp:Format">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Address>43</harp:Address>
                          <harp:PayloadType>S16</harp:PayloadType>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TreadmillCommands</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="5" Label="Source2" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>6</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="9" Label="Source2" />
                  <Edge From="2" To="10" Label="Source2" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="TimeToStopBelt" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>BeltOff</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Address>32</harp:Address>
                    <harp:PayloadType>U8</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TreadmillCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:LastOrDefault" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>ResetBeltPos</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Address>33</harp:Address>
                    <harp:PayloadType>S16</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TreadmillCommands</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="ResetPosition" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Address>43</harp:Address>
                    <harp:PayloadType>S16</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TreadmillCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EndTrial</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="11" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>